particles {
  coordinates = 0,
  standard_beam {
    n = 200,
    tob = 0,
    mass = 1.007276466812,
    charge = 1,
    ke = 200,
    cwf = 1,
    color = 1,
    direction = cone_direction_distribution {
      axis = vector(1, 0, 0),
      half_angle = 12.6,
      fill = true
    },
    position = vector(1, 50, 50)
  },
  standard_beam {
    n = 200,
    tob = 0,
    mass = 1.007276466812,
    charge = 0,
    ke = 200,
    cwf = 1,
    color = 2,
    direction = cone_direction_distribution {
      axis = vector(1, 0, 0),
      half_angle = 12.6,
      fill = true
    },
    position = vector(1, 50, 50)
  },
  standard_beam {
    n = 200,
    tob = 0,
    mass = 1.007276466812,
    charge = -1,
    ke = 200,
    cwf = 1,
    color = 3,
    direction = cone_direction_distribution {
      axis = vector(1, 0, 0),
      half_angle = 12.6,
      fill = true
    },
    position = vector(1, 50, 50)
  },
  standard_beam {
    n = 100,
    tob = 0,
    mass = 0.00054857990946,
    charge = -1,
    ke = 2.1,
    cwf = 1,
    color = 5,
    direction = cone_direction_distribution {
      axis = vector(1, 0, 0),
      half_angle = 12.6,
      fill = true
    },
    position = vector(1, 50, 50)
  }
}
