particles {
  coordinates = 0,
  standard_beam {
    n = 100,
    tob = 0,
    mass = 1.007276466812,
    charge = 1,
    ke = 100,
    cwf = 1,
    color = 1,
    direction = vector(1, 0, 0),
    position = vector(1, 24, 0)
  },
  standard_beam {
    n = 100,
    tob = 0,
    mass = 1.007276466812,
    charge = 0,
    ke = 100,
    cwf = 1,
    color = 2,
    direction = vector(1, 0, 0),
    position = vector(1, 24, 0)
  },
  standard_beam {
    n = 100,
    tob = 0,
    mass = 1.007276466812,
    charge = -1,
    ke = 100,
    cwf = 1,
    color = 3,
    direction = vector(1, 0, 0),
    position = vector(1, 24, 0)
  }
}
